PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  expName = Test1
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent welcome_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        Welcome to the Experiment!!

        Disclaimer: This experiment involves viewing flickering objects. If you are prone to photosensitive epilepsy or have other visual sensitivities, please proceed with caution or consider not participating. Just so we're clear, we can't take responsibility for any discomfort or issues that arise.
    ImageComponent caution_sign
      image = warning_sign.png
      pos = (0, 0.35)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine test_2
    RoutineSettingsComponent test_2
      skipIf = button2 == False
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    PolygonComponent obj1_t2
      fillColor = black
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent obj2_t2
      fillColor = white
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent obj3_t2
      fillColor = white
      pos = (0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    TextComponent test_2_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
      text = Focus on the black square
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    CodeComponent test_2_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [obj1_t2, obj2_t2, obj3_t2, obj2_t2, obj1_t2,
                   obj3_t2, obj3_t2, obj1_t2, obj3_t2, obj3_t2]

        # Frequencies for each object for every trial
        freq_trials = [[10, 5 , 2 ], #Trial 1 frequencies
                       [10 , 5 , 2 ], #Trial 2 frequencies
                       [2 , 5 , 2 ], #Trial 3 frequencies
                       [6 , 4 , 30], #Trial 4 frequencies
                       [8 , 6 , 7 ], #Trial 5 frequencies
                       [10, 20, 30], #Trial 6 frequencies
                       [1 , 2 , 30], #Trial 7 frequencies
                       [1 , 20, 3 ], #Trial 8 frequencies
                       [10, 2 , 3 ], #Trial 9 frequencies
                       [10 ,10 ,10 ]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_2.thisN]

        #All objects
        objects = [obj1_t2, obj2_t2, obj3_t2]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_2.thisN])

        test_2_mess.text = 'Focus on the black square (Test 2, Trial ' + str(trials_2.thisN + 1) + ')'
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine test
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  Routine GoodBye
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  Routine test_1
    RoutineSettingsComponent test_1
      skipIf = button1 == False
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    PolygonComponent obj1_t1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    TextComponent test_1_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the black square
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    CodeComponent test_1_code
      Code Type = Py
      Begin Routine:
        # Frequencies for each trial
        freq_obj1 = [15, #Trial 1 frequency
                    8,   #Trial 2 frequency
                    15,  #Trial 3 frequency
                    15,  #Trial 4 frequency
                    15,  #Trial 5 frequency
                    15,  #Trial 6 frequency
                    15,  #Trial 7 frequency
                    15,  #Trial 8 frequency
                    15,  #Trial 9 frequency
                    15]  #Trial 10 frequency

        # Frames per cycle for each object (full cycle = one on and one off phase)
        frames_per_cycle_obj1 = 60 // freq_obj1[trials_1.thisN]

        test_1_mess.text = 'Focus on the black square (Test 1, Trial ' + str(trials_1.thisN + 1) + ')'
      Each Frame:
        # Update opacities based on current frame number for each stimulus
        # Object 1
        obj1_t1.opacity = ((frameN % frames_per_cycle_obj1) < (frames_per_cycle_obj1 / 2))
  Routine test_3
    RoutineSettingsComponent test_3
      skipIf = button3 ==  False
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    PolygonComponent obj1_t3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent obj2_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent obj3_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent obj4_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    TextComponent test_3_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
      text = Focus on the black square
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    CodeComponent test_3_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [obj1_t3, obj4_t3, obj3_t3, obj2_t3, obj1_t3,
                   obj3_t3, obj4_t3, obj1_t3, obj3_t3, obj3_t3]

        # Frequencies for each object for every trial
        freq_trials = [[10, 5,
                        2, 15], #Trial 1 frequencies
                       [10, 5,
                        2, 15], #Trial 2 frequencies
                       [10, 5,
                        2, 15], #Trial 3 frequencies
                       [10, 5,
                        2, 15], #Trial 4 frequencies
                       [10, 5,
                        2, 15], #Trial 5 frequencies
                       [10, 5,
                       2, 15], #Trial 6 frequencies
                       [10, 5,
                        2, 15], #Trial 7 frequencies
                       [10, 5,
                        2, 15], #Trial 8 frequencies
                       [10, 5,
                        2, 15], #Trial 9 frequencies
                       [10, 5,
                        2, 15]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_3.thisN]

        #All objects
        objects = [obj1_t3, obj2_t3, obj3_t3, obj4_t3]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_3.thisN])

        test_3_mess.text = 'Focus on the black square (Test 3, Trial ' + str(trials_3.thisN + 1) + ')'
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine test_4
    RoutineSettingsComponent test_4
      skipIf = button4 ==  False
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    PolygonComponent obj1_t4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj2_t4
      fillColor = white
      pos = (0, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj3_t4
      fillColor = white
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj4_t4
      fillColor = white
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj5_t4
      fillColor = white
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj6_t4
      fillColor = white
      pos = (0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj7_t4
      fillColor = white
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj8_t4
      fillColor = white
      pos = (0, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent obj9_t4
      fillColor = white
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    TextComponent test_4_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
      text = Focus on the black square
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    CodeComponent test_4_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [obj1_t4, obj2_t4, obj3_t4, obj4_t4, obj5_t4,
                   obj6_t4, obj7_t4, obj8_t4, obj9_t4, obj5_t4]

        # Frequencies for each object
        freq_trials = [[10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 1 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 2 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 3 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 4 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 5 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 6 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 7 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 8 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 9 frequencies
                       [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30]] #Trial 10 frequencies

        #All objects
        objects = [obj1_t4, obj2_t4, obj3_t4,
                   obj4_t4, obj5_t4, obj6_t4,
                   obj7_t4, obj8_t4, obj9_t4,]

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_4.thisN]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_4.thisN])

        test_4_mess.text = 'Focus on the black square (Test 4, Trial ' + str(trials_4.thisN + 1) + ')'
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine PickTest
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    ButtonComponent button_t1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Test 1
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      callback:
        x = 1
        global button1
        button1 = True
    ButtonComponent button_t2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Test 2
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      callback:
        x = 2
        global button2
        button2 = True
    ButtonComponent button_t3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Test 3
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      callback:
        x = 3
        global button3
        button3 = True
    ButtonComponent button_t4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Test 4
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      callback:
        x = 4
        global button4
        button4= True
    ButtonComponent button_all
      bold = True
      forceEndRoutine = False
      letterHeight = 0.038
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = All Tests
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      callback:
        x = 5
        global button5
        button5 = True
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Chose a test by clicking on one of the boxes
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    CodeComponent code_5
      Code Type = Py
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      Before Experiment:
        #Intialize all buttons to False
        button1 = False
        button2 = False
        button3 = False
        button4 = False
        button5 = False
  Routine blank1s_t1
    RoutineSettingsComponent blank1s_t1
      skipIf = button1 == False
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    TextComponent blank_screen_t1_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine blank1s_t2
    RoutineSettingsComponent blank1s_t2
      skipIf = button2 == False
      stopVal [duration (s)] = 1
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      desc:
        Turn Screen Blank for 1 second
    TextComponent blank_screen_t2_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine blank1s_t3
    RoutineSettingsComponent blank1s_t3
      skipIf = button3 ==  False
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    TextComponent blank_screen_t3_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blank1s_t4
    RoutineSettingsComponent blank1s_t4
      skipIf = button4 ==  False
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    TextComponent blank_screen_t4_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine button2_false
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button2 = False
  Routine button3_false
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button3= False
  Routine reset_buttons
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    CodeComponent reset_button_bool
      Code Type = Py
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      Begin Routine:
        #duck
        button1 = False
        button2 = False
        button3 = False
        button4 = False
        button5 = False
  Routine GlobalFunctions
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        #Set number of repetitions  for each test
        global_rep_num = 2
        rep_num1 = global_rep_num
        rep_num2 = global_rep_num
        rep_num3 = global_rep_num
        rep_num4 = global_rep_num

        #Set number of trials for each test
        global_trial_num = 2
        trial_num1 = global_trial_num
        trial_num2 = global_trial_num
        trial_num3 = global_trial_num
        trial_num4 = global_trial_num

        #Set duration of repetitions for each test
        global_dur_test = 2
        dur_test1 = global_dur_test
        dur_test2 = global_dur_test
        dur_test3 = global_dur_test
        dur_test4 = global_dur_test

        #Update display to show target object
        def selectTarget(objects, target):
            for obj in objects:
                if obj == target:
                    obj.color = 'black'
                else:
                    obj.color = 'white'

        # Update opacities based on current frame number for each stimulus
        def flickerObjects(objects, freqs, frameN):
            for i in range(len(objects)): #loop through all objects
                frames_per_cycle = 60 // freqs[i]
                objects[i].opacity = ((frameN % frames_per_cycle) < (frames_per_cycle / 2))
Flow
  Routine GlobalFunctions
  Routine WelcomeScreen
  LoopInitiator return_to_homepage loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine PickTest
    LoopInitiator trials_1 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num1
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      LoopInitiator repetition_1 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num1
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        Routine test_1
        Routine blank1s_t1
      LoopTerminator repetition_1
    LoopTerminator trials_1
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num2
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      LoopInitiator repetition_2 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num2
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        Routine test_2
        Routine blank1s_t2
      LoopTerminator repetition_2
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num3
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      LoopInitiator repetition_3 loopType="TrialHandler"
        loopType = random
        nReps = rep_num3
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        Routine test_3
        Routine blank1s_t3
      LoopTerminator repetition_3
    LoopTerminator trials_3
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num4
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      LoopInitiator repetition_4 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num4
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        Routine test_4
        Routine blank1s_t4
      LoopTerminator repetition_4
    LoopTerminator trials_4
    Routine reset_buttons
  LoopTerminator return_to_homepage
  Routine GoodBye
