PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = Test1
  keyboardBackend = ioHub
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Routines
  Routine test_2
    RoutineSettingsComponent test_2
      skipIf = (button2 == False) or (lost == True)
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    ImageComponent earth2
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL2_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_1
      image = spaceship.jpeg
      pos = (0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent boxL2_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_2
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent boxL2_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_3
      image = spaceship.jpeg
      pos = (0.6, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    TextComponent Attack_message2
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_2_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    CodeComponent test_2_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [boxL2_1, boxL2_2, boxL2_3, boxL2_1, boxL2_3,
                   boxL2_1, boxL2_1, boxL2_2, boxL2_3, boxL2_1]

        # Frequencies for each object for every trial
        freq_trials = [[5, 10 , 15 ], #Trial 1 frequencies
                       [10 , 5 , 2 ], #Trial 2 frequencies
                       [2 , 5 , 2 ], #Trial 3 frequencies
                       [6 , 4 , 30], #Trial 4 frequencies
                       [8 , 6 , 7 ], #Trial 5 frequencies
                       [10, 20, 30], #Trial 6 frequencies
                       [1 , 2 , 30], #Trial 7 frequencies
                       [1 , 20, 3 ], #Trial 8 frequencies
                       [10, 2 , 3 ], #Trial 9 frequencies
                       [10 ,10 ,10 ]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_2.thisN]

        #All objects
        objects = [boxL2_1, boxL2_2, boxL2_3]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_2.thisN])

        test_2_mess.text = 'Level 2, Round ' + str(trials_2.thisN + 1)
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine test
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  Routine GoodBye
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  Routine test_1
    RoutineSettingsComponent test_1
      skipIf = (button1 == False) or (lost == True)
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    ImageComponent earth1
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL1_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    ImageComponent shipL1_1
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    TextComponent Attack_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_1_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    CodeComponent test_1_code
      Code Type = Py
      Begin Routine:
        home_button = False
        # Frequencies for each trial
        freq_trials = [[1], #Trial 1 frequency
                    [2],   #Trial 2 frequency
                    [15],  #Trial 3 frequency
                    [15],  #Trial 4 frequency
                    [15],  #Trial 5 frequency
                    [15],  #Trial 6 frequency
                    [15],  #Trial 7 frequency
                    [15],  #Trial 8 frequency
                    [15],  #Trial 9 frequency
                    [15]]  #Trial 10 frequency

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_1.thisN]

        #Target object for user to look at for each trial
        targets = [boxL1_1, boxL1_1, boxL1_1, boxL1_1, boxL1_1,
                   boxL1_1, boxL1_1, boxL1_1, boxL1_1, boxL1_1]

        #All objects
        objects = [boxL1_1]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_1.thisN])

        test_1_mess.text = 'Level 1, Round ' + str(trials_1.thisN + 1)
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine test_3
    RoutineSettingsComponent test_3
      skipIf = (button3 == False) or (lost == True)
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    ImageComponent earth3
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL3_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_1
      image = spaceship.jpeg
      pos = (0.1, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_2
      image = spaceship.jpeg
      pos = (0.6, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, -0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_3
      image = spaceship.jpeg
      pos = (0.1, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_4
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, -0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_4
      image = spaceship.jpeg
      pos = (0.6, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    TextComponent Attack_message3
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_3_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    CodeComponent test_3_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [boxL3_1, boxL3_2, boxL3_3, boxL3_4, boxL3_1,
                   boxL3_1, boxL3_2, boxL3_4, boxL3_2, boxL3_1]

        # Frequencies for each object for every trial
        freq_trials = [[10, 5,
                        2, 15], #Trial 1 frequencies
                       [10, 5,
                        2, 15], #Trial 2 frequencies
                       [10, 5,
                        2, 15], #Trial 3 frequencies
                       [10, 5,
                        2, 15], #Trial 4 frequencies
                       [10, 5,
                        2, 15], #Trial 5 frequencies
                       [10, 5,
                       2, 15], #Trial 6 frequencies
                       [10, 5,
                        2, 15], #Trial 7 frequencies
                       [10, 5,
                        2, 15], #Trial 8 frequencies
                       [10, 5,
                        2, 15], #Trial 9 frequencies
                       [10, 5,
                        2, 15]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_3.thisN]

        #All objects
        objects = [boxL3_1, boxL3_2, boxL3_3, boxL3_4]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_3.thisN])

        test_3_mess.text = 'Level 3, Round ' + str(trials_3.thisN + 1)
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
  Routine test_4
    RoutineSettingsComponent test_4
      skipIf = (button4 == False) or (lost == True)
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    ImageComponent earth4
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL4_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_1
      image = spaceship.jpeg
      pos = (0.1, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_2
      image = spaceship.jpeg
      pos = (0.35, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_3
      image = spaceship.jpeg
      pos = (0.6, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_4
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_4
      image = spaceship.jpeg
      pos = (0.1, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_5
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_5
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_6
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_6
      image = spaceship.jpeg
      pos = (0.6, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_7
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, -0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_7
      image = spaceship.jpeg
      pos = (0.1, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_8
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_8
      image = spaceship.jpeg
      pos = (0.35, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_9
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, -0.25)
      shape = rectangle
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_9
      image = spaceship.jpeg
      pos = (0.6, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    TextComponent Attack_message4
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_4_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    CodeComponent test_4_code
      Code Type = Py
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      Begin Routine:
        #Target object for user to look at for each trial
        targets = [boxL4_1, boxL4_2, boxL4_3, boxL4_4, boxL4_5,
                   boxL4_6, boxL4_7, boxL4_8, boxL4_9, boxL4_5]

        # Frequencies for each object
        freq_trials = [[10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 1 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 2 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 3 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 4 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 5 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 6 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 7 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 8 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 9 frequencies
                       [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30]] #Trial 10 frequencies

        #All objects
        objects = [boxL4_1, boxL4_2, boxL4_3,
                   boxL4_4, boxL4_5, boxL4_6,
                   boxL4_7, boxL4_8, boxL4_9]

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_4.thisN]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_4.thisN])

        test_4_mess.text = 'Level 4, Round ' + str(trials_4.thisN + 1)
      Each Frame:
        #Flicker objects are set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
      End Routine:
        if button4 == True:
            lost = True
  Routine PickTest
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    MovieComponent brain_animation
      backend = ffpyplayer
      forceEndRoutine = False
      movie = brain_animation.mp4
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_t1
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      text = Level 1
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      callback:
        x = 1
        global button1
        button1 = True
    ButtonComponent button_t2
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      text = Level 2
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      callback:
        x = 2
        global button2
        button2 = True
    ButtonComponent button_t3
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      text = Level 3
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      callback:
        x = 3
        global button3
        button3 = True
    ButtonComponent button_t4
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      text = Level 4
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      callback:
        x = 4
        global button4
        button4= True
    ButtonComponent button_all
      bold = True
      borderColor = -0.1686, -0.2941, 0.6078
      borderWidth = 2
      color = black
      fillColor = 0.0902, -1.0000, 0.0902
      forceEndRoutine = True
      letterHeight = 0.038
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      text = All
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      callback:
        button1 = True
        button2= True
        button3= True
        button4= True
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 1
      text = Welcome: Chose a test by clicking on one of the boxes
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        lost = False
  Routine blank1s_t2
    RoutineSettingsComponent blank1s_t2
      skipIf = button2 == False
      stopVal [duration (s)] = 1
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      desc:
        Turn Screen Blank for 1 second
    TextComponent blank_screen_t2_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine blank1s_t3
    RoutineSettingsComponent blank1s_t3
      skipIf = button3 ==  False
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    TextComponent blank_screen_t3_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blank1s_t4
    RoutineSettingsComponent blank1s_t4
      skipIf = button4 ==  False
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    TextComponent blank_screen_t4_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine button2_false
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button2 = False
  Routine button3_false
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button3= False
  Routine reset_buttons
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    CodeComponent reset_button_bool
      Code Type = Py
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      Begin Routine:
        #duck
        button1 = False
        button2 = False
        button3 = False
        button4 = False
        button5 = False
        start_exp_button = False
        lost = False
  Routine GlobalFunctions
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        #Intialize all buttons to False
        return_home = True
        about_exp_button = False
        start_exp_button = False
        button1 = False
        button2 = False
        button3 = False
        button4 = False
        button5 = False

        #Set number of repetitions  for each test
        global_rep_num = 1
        rep_num1 = global_rep_num
        rep_num2 = global_rep_num
        rep_num3 = global_rep_num
        rep_num4 = global_rep_num

        #Set number of trials for each test
        global_trial_num = 1
        trial_num1 = global_trial_num
        trial_num2 = global_trial_num
        trial_num3 = global_trial_num
        trial_num4 = global_trial_num

        #Set duration of repetitions for each test
        global_dur_test = 5
        dur_test1 = global_dur_test
        dur_test2 = global_dur_test
        dur_test3 = global_dur_test
        dur_test4 = global_dur_test

        dur_blank = 1

        dur_end = 5
        #Update display to show target object
        def selectTarget(objects, target):
            for obj in objects:
                if obj == target:
                    obj.lineColor = 'red'
                else:
                    obj.lineColor = 'white'

        # Update opacities based on current frame number for each stimulus
        def flickerObjects(objects, freqs, frameN):
            for i in range(len(objects)): #loop through all objects
                frames_per_cycle = 60 // freqs[i]
                objects[i].opacity = (((frameN) % frames_per_cycle) < (frames_per_cycle / 2))
  Routine WarningScreen
    RoutineSettingsComponent WarningScreen
      skipIf = start_exp_button == False
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    ImageComponent white_background
      image = white_background.jpeg
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent welcome_message
      color = black
      font = Garamond
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every frame]:
        This experiment entails the observation of flickering objects. Individuals with a predisposition to photosensitive epilepsy or those possessing other visual sensitivities are advised to exercise utmost caution or to abstain from participation. It is imperative to acknowledge that we cannot assume liability for any discomfort or complications that may ensue.
    ImageComponent caution_sign
      image = warning_sign.png
      pos = (0.6, 0.4)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      borderColor = red
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = By clicking, you acknowledge understanding the epilepsy risk.
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    TextComponent warning_heading
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = WARNING
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  Routine WelcomeScreen
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    ImageComponent homepage_image
      image = homepage_1.webp
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent about_button
      bold = True
      color = 1.0000, -0.4588, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.5, 0.09)
      startVal [time (s)] = 0
      text = Click here to learn more 
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      callback:
        global about_exp_button
        about_exp_button = True
    ButtonComponent start_button
      bold = True
      color = 1.0000, -0.4588, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.5, 0.08)
      startVal [time (s)] = 0
      text = Click here to start game
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      callback:
        global start_exp_button
        start_exp_button = True
  Routine AboutExpScreen
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    ImageComponent image_instruction
      image [set every repeat] = $about_slide
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent next_button
      bold = True
      callback = button_pressed = "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Next >>
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    ButtonComponent back_button
      bold = True
      callback = button_pressed = "back"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = << Back
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  Routine instructionprep
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        cur_row = 0
        button_pressed = "none"
        show_instructions = 1
        max_slides = 6
      Begin Routine:
        if (about_exp_button == False) :
            instructions_controller.finished = 1
            show_instructions = 0
            cur_row = max_slides
        if(button_pressed == "next"):
            cur_row += 1

        elif (button_pressed == "back"):
            cur_row -= 1
        button_pressed = "none"

        if (cur_row < 0) :
            cur_row = 0

        if (cur_row > max_slides) :
            instructions_controller.finished = 1
            show_instructions = 0
            cur_row = max_slides
  Routine reset_home_button
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  Routine earth_win
    RoutineSettingsComponent earth_win
      skipIf = lost == True
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    ImageComponent earth_win_2
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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    TextComponent win_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
      text = YOU WIN!!! You saved Earth from aliens!!!
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  Routine earth_lose
    RoutineSettingsComponent earth_lose
      skipIf = lost == False
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    ImageComponent earth_lose_2
      image = earth_lost.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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    TextComponent lose_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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      text:
        YOU LOSE!!! Aliens took over Earth!!!
        You did not focus on the correct spaceship
  Routine earth_pause_4
    ImageComponent earth_blank
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    RoutineSettingsComponent earth_pause_4
      skipIf = (button4 == False) or (lost == True)
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    TextComponent continue_playing_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Aliens are still attacking!!!
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  Routine earth_pause_3
    ImageComponent earth_blank_2
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    RoutineSettingsComponent earth_pause_3
      skipIf = (button3 == False) or (lost == True)
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    TextComponent continue_playing_message_2
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Aliens are still attacking!!!
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  Routine earth_pause_2
    ImageComponent earth_blank_3
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    RoutineSettingsComponent earth_pause_2
      skipIf = (button2 == False) or (lost == True)
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    TextComponent continue_playing_message_3
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Aliens are still attacking!!!
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  Routine earth_pause_1
    ImageComponent earth_blank_4
      image = earth.jpeg
      pos = (-0.10, 0)
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    RoutineSettingsComponent earth_pause_1
      skipIf = (button1 == False) or (lost == True)
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    TextComponent continue_playing_message_4
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Aliens are still attacking!!!
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Flow
  Routine GlobalFunctions
  Routine WelcomeScreen
  LoopInitiator instructions_controller loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 9999
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    Routine instructionprep
    LoopInitiator about_slide_loop loopType="TrialHandler"
      Selected rows = $str(cur_row)
      conditionsFile = slide_order.xlsx
      isTrials = False
      loopType = random
      nReps = show_instructions
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      conditions:
        [{'about_slide': 'about/Slide1.jpeg'},
        {'about_slide': 'about/Slide2.jpeg'},
        {'about_slide': 'about/Slide3.jpeg'},
        {'about_slide': 'about/Slide4.jpeg'},
        {'about_slide': 'about/Slide5.jpeg'},
        {'about_slide': 'about/Slide6.jpeg'},
        {'about_slide': 'about/Slide7.jpeg'}]
      Routine AboutExpScreen
    LoopTerminator about_slide_loop
  LoopTerminator instructions_controller
  Routine WarningScreen
  LoopInitiator return_to_homepage loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine PickTest
    LoopInitiator trials_1 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num1
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      LoopInitiator repetition_1 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num1
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        Routine test_1
        Routine earth_pause_1
      LoopTerminator repetition_1
    LoopTerminator trials_1
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num2
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      LoopInitiator repetition_2 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num2
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        Routine test_2
        Routine earth_pause_2
      LoopTerminator repetition_2
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num3
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      LoopInitiator repetition_3 loopType="TrialHandler"
        loopType = random
        nReps = rep_num3
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        Routine test_3
        Routine earth_pause_3
      LoopTerminator repetition_3
    LoopTerminator trials_3
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num4
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      LoopInitiator repetition_4 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num4
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        Routine test_4
        Routine earth_pause_4
      LoopTerminator repetition_4
    LoopTerminator trials_4
    Routine earth_win
    Routine earth_lose
    Routine reset_buttons
  LoopTerminator return_to_homepage
  Routine GoodBye
